nrnpython("from run_cell import run_cell")

nrnpython("run_cell('IBR', \
                    nogui        = True, \
                    showca       = True, \
                    duration     = 1000, \
                    dt           = 0.001, \
                    idelay       = 500, \
                    iduration    = 2000, \
                    iamp         = 0.15, \
                    gcabar_ical  = 2.2e-4, \
	                gkbar_im     = 3e-5, \
                    e_pas        = -85, \
                    g_pas        = 1e-5, \
	                gnabar_hh2   = 0.05, \
	                gkbar_hh2    = 0.005, \
                    v_init       = -84)")