nrnpython("from run_cell import run_cell")

nrnpython("run_cell('IB', \
                    nogui        = False, \
                    diameter     = 96, \
                    showca       = False, \
                    duration     = 3000, \
                    dt           = 0.01, \
                    idelay       = 500, \
                    iduration    = 2000, \
                    iamp         = 0.15, \
                    iampbackground   = 0.05, \
                    gcabar_ical  = 0.0001, \
	                gkbar_im     = 3e-5, \
                    e_pas        = -70, \
                    g_pas        = 1e-5, \
	                gnabar_hh2   = 0.05, \
	                gkbar_hh2    = 0.005, \
                    v_init       = -70)")