nrnpython("from run_cell import run_cell")

nrnpython("run_cell('LTS', \
                    nogui        = False, \
                    diameter     = 89.2, \
                    showca       = False, \
                    duration     = 2000, \
                    dt           = 0.01, \
                    idelay       = 500, \
                    iduration    = 1000, \
                    iamp         = 0.067, \
                    iampbackground = -0.11, \
                    gcabar_ical  = 0.0004, \
                    shift_it     = -7, \
	                gkbar_im     = 2.8e-5, \
                    e_pas        = -50, \
                    g_pas        = 1.9e-5, \
	                gnabar_hh2   = 0.05, \
	                gkbar_hh2    = 0.004, \
                    vtraub_hh2  = -50, \
                    v_init       = -70)")