nrnpython("from run_cell import run_cell")

nrnpython("run_cell('RS', \
                    nogui       = False, \
                    diameter    = 67, \
                    duration    = 1000, \
                    dt          = 0.01, \
                    idelay      = 200, \
                    iduration   = 490, \
                    iamp        = 0.7, \
                    e_pas       = -70, \
                    g_pas       = 1.5e-4, \
                    gnabar_hh2  = 0.05, \
                    gkbar_hh2   = 0.01, \
                    vtraub_hh2  = -60, \
                    gkbar_im    = 0, \
                    v_init      = -65)")

