nrnpython("from run_cell import run_cell")

nrnpython("run_cell('FS', \
                    nogui       = False, \
                    diameter    = 56.9, \
                    duration    = 3000, \
                    dt          = 0.01, \
                    idelay      = 600, \
                    iduration   = 2000, \
                    iamp        = 0.08, \
                    e_pas       = -70.4, \
                    g_pas       = 3.8e-5, \
                    gnabar_hh2  = 0.058, \
                    gkbar_hh2   = 0.0039, \
                    vtraub_hh2  = -57.9, \
                    gkbar_im    = 7.87e-5, \
                    taumax_im   = 502, \
                    v_init      = -65)")

